CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:7
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes

NamesAndTypes:[module_num:3|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notes:['DNA: DNA stained with DAPI', 'PH3: An antibody for phosphorylated histone H3 correlated with mitosis', 'cellbody: ']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:5
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does C "0")
    Name to assign these images:eGFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does C "1")
    Name to assign these images:DRAQ5
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does C "2")
    Name to assign these images:p53
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does C "3")
    Name to assign these images:FOXJ1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does C "4")
    Name to assign these images:DIC
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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notes:['Create a binary mask of nuclei using the DRAQ5 channel']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
    Select the input image:DRAQ5
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):20,90
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.6
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
MeasureObjectIntensity:[module_num:6|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
    Select images to measure:DRAQ5, FOXJ1, eGFP, p53
    Select objects to measure:Nuclei

ExportToSpreadsheet:[module_num:7|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|C:\\Users\\sam.siljee\\OneDrive - GMRI\\Documents\\Coding\\CellProfiler\\p53 FOXJ1 output
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:p53_FOXJ1_
    Overwrite existing files without warning?:Yes
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